PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Salience_RO
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent exit_Text
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = When you are finished ranking the items, press RETURN
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    KeyboardComponent key_resp_EXIT
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image = images_RO_Sal/Landmark1.png
      pos = (-.5,.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox1
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (-.5, .15)
      size = (.15, .08)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image = images_RO_Sal/Landmark2.png
      pos = (-.25,.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (-.25,.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image = images_RO_Sal/Landmark3.png
      pos = (0,.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox3
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (0,.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image = images_RO_Sal/Landmark4.png
      pos = (.25,.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox4
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (.25,.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image = images_RO_Sal/Landmark5.png
      pos = (.5,.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox5
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (.5,.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image6
      image = images_RO_Sal/Landmark6.png
      pos = (-.5,0)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox6
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (-.5,-.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image7
      image = images_RO_Sal/Landmark7.png
      pos = (-.25,0)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox7
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (-.25,-.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image8
      image = images_RO_Sal/Landmark8.png
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox8
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (0,-.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image9
      image = images_RO_Sal/Landmark9.png
      pos = (.25,0)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox9
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (.25,-.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image10
      image = images_RO_Sal/Landmark10.png
      pos = (.5,0)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox10
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (.5,-.15)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image11
      image = images_RO_Sal/Landmark11.png
      pos = (-.5,-.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox11
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (-.5,-.45)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image12
      image = images_RO_Sal/Landmark12.png
      pos = (-.25,-.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox12
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (-.25,-.45)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image13
      image = images_RO_Sal/Landmark13.png
      pos = (0,-.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox13
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (0,-.45)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image14
      image = images_RO_Sal/Landmark14.png
      pos = (.25,-.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox14
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (.25,-.45)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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    ImageComponent image15
      image = images_RO_Sal/Landmark15.png
      pos = (.5,-.3)
      size = (.2,.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox15
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (.5,-.45)
      size = (.15,.08)
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the Salience Rank Ordering Task 
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will rank the following items from 1 - 14 according to salience. 1 being least salient and 14 being the most salient. Salience is defined as being distinct, prominent, or remarkable.

        Press SPACE to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating in the Salience Rank Ordering Task!
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Flow
  Routine welcome
  Routine instruction
  Routine trial
  Routine end
